PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = choice_experiment
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Routines
  Routine Trial
    TextComponent immediate_choice
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $immediate
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    TextComponent delayed_choice
      letterHeight = 0.1
      pos = (0.2, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
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      text [set every repeat]:
        $delayed
    KeyboardComponent choice
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = choice_experiment_options.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('immediate', 1.0), ('delayed', 5.0)]),
      OrderedDict([('immediate', 1.5), ('delayed', 3.0)]),
      OrderedDict([('immediate', 5.0), ('delayed', 10.0)]),
      OrderedDict([('immediate', 2.0), ('delayed', 4.0)]),
      OrderedDict([('immediate', 1.0), ('delayed', 1.5)])]
    Routine Trial
  LoopTerminator trials
